PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = genderstroop
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instructionstext
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Gendered Language Stroop Task.

        You will see words related to personality traits, appearance, and behavior on the screen.

        Your task is to categorize the WORD, not the color.

        Please press:
        M = masculine-coded word
        F = feminine-coded word

        Ignore the color of the text.

        Please respond as quickly and accurately as possible.

        Press SPACE to begin.
    KeyboardComponent startkey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine strooptrial
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    TextComponent fixationsymbol
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
      text = +
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    TextComponent wordStim
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'm','f'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine endscreen
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    TextComponent endtext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        The experiment is now complete.

        Press SPACE to exit.
    KeyboardComponent endkey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rating
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    TextComponent ratingtext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will rate each word.

        For each word, rate how gender-coded it feels to you on a scale of 1-5.

        Press:
        1 = strongly feminine
        2 = slightly feminine
        3 = neutral
        4 = slightly masculine
        5 = strongly masculine

        Press SPACE to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ratingtrial
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    TextComponent ratingword
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    TextComponent ratingscale
      letterHeight = 0.03
      pos = (0, -.25)
      startVal [time (s)] = 0.0
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      text:
        1 = strongly feminine
        2 = slightly feminine
        3 = neutral
        4 = slightly masculine
        5 = strongly masculine
    KeyboardComponent key_resp_3
      allowedKeys = ['1','2','3','4','5','6','7']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'dominant'), ('word_category', 'masculine'), ('color', 'blue'), ('color_category', 'masculine'), ('congruency', 'congruent'), ('correct_key', 'm')]),
      OrderedDict([('word', 'dominant'), ('word_category', 'masculine'), ('color', 'pink'), ('color_category', 'feminine'), ('congruency', 'incongruent'), ('correct_key', 'm')]),
      OrderedDict([('word', 'nurturing'), ('word_category', 'feminine'), ('color', 'pink'), ('color_category', 'feminine'), ('congruency', 'congruent'), ('correct_key', 'f')]),
      OrderedDict([('word', 'nurturing'), ('word_category', 'feminine'), ('color', 'blue'), ('color_category', 'masculine'), ('congruency', 'incongruent'), ('correct_key', 'f')]),
      OrderedDict([('word', 'assertive'), ('word_category', 'masculine'), ('color', 'blue'), ('color_category', 'masculine'), ('congruency', 'congruent'), ('correct_key', 'm')]),
      OrderedDict([('word', 'assertive'), ('word_category', 'masculine'), ('color', 'pink'), ('color_category', 'feminine'), ('congruency', 'incongruent'), ('correct_key', 'm')]),
      OrderedDict([('word', 'gentle'), ('word_category', 'feminine'), ('color', 'pink'), ('color_category', 'feminine'), ('congruency', 'congruent'), ('correct_key', 'f')]),
      OrderedDict([('word', 'gentle'), ('word_category', 'feminine'), ('color', 'blue'), ('color_category', 'masculine'), ('congruency', 'incongruent'), ('correct_key', 'f')])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
    Routine strooptrial
  LoopTerminator trials
  Routine rating
  LoopInitiator ratings loopType="TrialHandler"
    conditionsFile = ratings.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'dominant')]),
      OrderedDict([('word', 'assertive')]),
      OrderedDict([('word', 'athletic')]),
      OrderedDict([('word', 'stoic')]),
      OrderedDict([('word', 'rational')]),
      OrderedDict([('word', 'tough')]),
      OrderedDict([('word', 'independent')]),
      OrderedDict([('word', 'commanding')]),
      OrderedDict([('word', 'muscular')]),
      OrderedDict([('word', 'adventurous')]),
      OrderedDict([('word', 'nurturing')]),
      OrderedDict([('word', 'gentle')]),
      OrderedDict([('word', 'delicate')]),
      OrderedDict([('word', 'graceful')]),
      OrderedDict([('word', 'sensitive')]),
      OrderedDict([('word', 'empathetic')]),
      OrderedDict([('word', 'soft')]),
      OrderedDict([('word', 'comforting')]),
      OrderedDict([('word', 'emotional')]),
      OrderedDict([('word', 'caring')])]
    Routine ratingtrial
  LoopTerminator ratings
  Routine endscreen
